PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = cm
  Window size (pixels) = [1440, 900]
  color = $[-1,-1,-1]
  expName = SART
  logging level = debug
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Routines
  Routine trial
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        sizes = [1.7,2.5,3.3,3.5,4.2]*2
        shuffle(sizes)
      Begin Routine:
        size = sizes.pop()
        thisExp.addData('size', size)
    TextComponent digit
      color [set every repeat] = $colour
      letterHeight [set every repeat] = size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = stimtime
      text [set every repeat] = $target
      units = norm
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'space'
      correctAns = $response
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = stimtime_resp
      storeCorrect = True
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    SoundComponent marker
      sound [set during: trial.ISI] = $tone
      startVal [condition] = digit.status==STARTED
      stopVal [duration (s)] = 0.1
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    StaticComponent ISI
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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  Routine bye
    TextComponent text_2
      letterHeight = 0.8
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = The test is over. Thank you for participating.
      units = norm
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  Routine feedback
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        times = [1.3,1.4,1.5,1.6,1.7]*10
        shuffle(times)
      Begin Routine:
        time = times.pop()
        thisExp.addData('time', time)

        if key_resp.corr==1:
            msg='###'
            msgColor = 'green'
        if key_resp.corr==0:
            msg='###'
            msgColor = 'red'
        if not key_resp.keys:
            msg=' '
            msgColor = 'yellow'
    TextComponent feedback_msg
      color [set every repeat] = $msgColor
      letterHeight = 4.23
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
      text [set every repeat] = $msg
      units = norm
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    TextComponent feedback_iti
      letterHeight = 0.1
      startVal [condition] = feedback_msg.status==FINISHED
      stopVal [duration (s)] = 0
      units = norm
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  Routine Instr
    TextComponent instr_text
      letterHeight = 0.8
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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      text:
        In this task you will be presented with the digits 1 to 9 in the center of the screen. Your task is to press the SPACEBAR in response to each digit, except for when the digit is a ‘3’. Each digit is followed by a hash tag, which you can ignore.


        Press SPACE to continue
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instr2
    TextComponent text
      letterHeight = 0.8
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Some of the digits will be white and some will be dark grey.

        If they are white you can just press the space bar.

        If you see a digit in dark grey, press the space bar once and say “now” and then refocus and concentrate on the task at hand. The digit 3 will never be dark grey.

        Press SPACE to continue
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instr3
    TextComponent text_6
      letterHeight = 0.8
      startVal [time (s)] = 0.0
      units = norm
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      text:
        For example, if you see the digit ‘1’ in white, press the space bar.

        If you see a ‘4’ in white press the spacebar.

        If you see a ‘3’, DO NOT press the space bar.

        If you see a ‘5’ in dark grey, press the space bar once and say “now” and then refocus and concentrate on the task.

        If you see a ‘7’ in white press the space bar. And so on. There will be some practice trials before the test begins.

        Press SPACE to continue
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instr4
    TextComponent text_7
      letterHeight = 0.8
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Please give equal importance to both the speed and accuracy of your responses.

        Please ask the experimenter if you have any questions.

        Press SPACE to start the practice trials.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instr5
    TextComponent text_8
      letterHeight = 0.8
      startVal [time (s)] = 0.0
      units = norm
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      text:
        The practice trials have finished.

        Press SPACE to begin the real task.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine real_trial
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        sizes = []
        for Idx in range(100):
             sizes.append(1.7)
             sizes.append(1.5)
             sizes.append(3.3)
             sizes.append(3.5)
             sizes.append(4.2)

        print('Preshuffle',sizes[0])
        shuffle(sizes)
        print('Postshuffle',sizes[0])
      Begin Routine:
        size = sizes.pop()
        thisExp.addData('size',size)
    TextComponent digits
      color [set every repeat] = $colour
      letterHeight [set every repeat] = size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = stimtime
      units = norm
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      text [set every repeat]:
        $target
    KeyboardComponent key_resp_real
      allowedKeys [set every repeat] = 'space'
      correctAns = $response
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = stimtime_resp
      storeCorrect = True
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    SoundComponent marker_2
      sound [set during: trial.ISI] = $tone
      startVal [condition] = digits.status==STARTED
      stopVal [duration (s)] = 0.1
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    StaticComponent ISI_2
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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  Routine real_feedback
  Routine real_feedback_2
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        times = []
        for Idx in range(100):
             times.append(1.3)
             times.append(1.4)
             times.append(1.5)
             times.append(1.6)
             times.append(1.7)

        print('Preshuffle',times[0])
        shuffle(times)
        print('Postshuffle',times[0])
      Begin Routine:
        time = times.pop()
        thisExp.addData('time', time)

        if key_resp_real.corr==1:
            msg='###'
            msgColor = 'green'
        if key_resp_real.corr==0:
            msg='###'
            msgColor = 'red'
        if not key_resp_real.keys:
            msg=''
            msgColor = 'yellow'
    TextComponent feedback_msg2
      color [set every repeat] = $msgColor
      letterHeight = 4.23
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
      text [set every repeat] = $msg
      units = norm
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    TextComponent feedback_iti2
      letterHeight = 0.1
      startVal [condition] = feedback_msg2.status==FINISHED
      stopVal [duration (s)] = 0
      units = norm
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Flow
  Routine Instr
  Routine Instr2
  Routine Instr3
  Routine Instr4
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Practice_stim_short.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'target': 1, 'colour': 'white', 'stimtime': 0.15, 'stimtime_resp': 1, 'response': 'space', 'tone': 1000},
      {'target': 2, 'colour': 'white', 'stimtime': 0.15, 'stimtime_resp': 1, 'response': 'space', 'tone': 1000},
      {'target': 3, 'colour': 'white', 'stimtime': 0.15, 'stimtime_resp': 1, 'response': 'None', 'tone': 800},
      {'target': 4, 'colour': 'white', 'stimtime': 0.15, 'stimtime_resp': 1, 'response': 'space', 'tone': 1000},
      {'target': 5, 'colour': 'white', 'stimtime': 0.15, 'stimtime_resp': 1, 'response': 'space', 'tone': 1000},
      {'target': 6, 'colour': 'white', 'stimtime': 0.15, 'stimtime_resp': 1, 'response': 'space', 'tone': 1000},
      {'target': 7, 'colour': 'white', 'stimtime': 0.15, 'stimtime_resp': 1, 'response': 'space', 'tone': 1000},
      {'target': 8, 'colour': 'white', 'stimtime': 0.15, 'stimtime_resp': 1, 'response': 'space', 'tone': 1000},
      {'target': 9, 'colour': 'white', 'stimtime': 0.15, 'stimtime_resp': 1, 'response': 'space', 'tone': 1000},
      {'target': 7, 'colour': 'darkslategrey', 'stimtime': 7.5, 'stimtime_resp': 7.5, 'response': 'space', 'tone': 1200}]
    Routine trial
    Routine feedback
  LoopTerminator trials
  Routine Instr5
  LoopInitiator real_trials loopType="TrialHandler"
    conditionsFile = fuck u sart/Exp_stimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'target': 3, 'colour': 'white', 'stimtime': 0.15, 'stimtime_resp': 1, 'response': 'None', 'tone': 800},
      {'target': 3, 'colour': 'white', 'stimtime': 0.15, 'stimtime_resp': 1, 'response': 'None', 'tone': 800},
      {'target': 3, 'colour': 'white', 'stimtime': 0.15, 'stimtime_resp': 1, 'response': 'None', 'tone': 800},
      {'target': 3, 'colour': 'white', 'stimtime': 0.15, 'stimtime_resp': 1, 'response': 'None', 'tone': 800},
      {'target': 3, 'colour': 'white', 'stimtime': 0.15, 'stimtime_resp': 1, 'response': 'None', 'tone': 800},
      {'target': 3, 'colour': 'white', 'stimtime': 0.15, 'stimtime_resp': 1, 'response': 'None', 'tone': 800},
      {'target': 3, 'colour': 'white', 'stimtime': 0.15, 'stimtime_resp': 1, 'response': 'None', 'tone': 800},
      {'target': 3, 'colour': 'white', 'stimtime': 0.15, 'stimtime_resp': 1, 'response': 'None', 'tone': 800},
      {'target': 3, 'colour': 'white', 'stimtime': 0.15, 'stimtime_resp': 1, 'response': 'None', 'tone': 800},
      {'target': 3, 'colour': 'white', 'stimtime': 0.15, 'stimtime_resp': 1, 'response': 'None', 'tone': 800},
      {'target': 3, 'colour': 'white', 'stimtime': 0.15, 'stimtime_resp': 1, 'response': 'None', 'tone': 800},
      {'target': 3, 'colour': 'white', 'stimtime': 0.15, 'stimtime_resp': 1, 'response': 'None', 'tone': 800},
      {'target': 3, 'colour': 'white', 'stimtime': 0.15, 'stimtime_resp': 1, 'response': 'None', 'tone': 800},
      {'target': 3, 'colour': 'white', 'stimtime': 0.15, 'stimtime_resp': 1, 'response': 'None', 'tone': 800}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
    Routine real_trial
    Routine real_feedback_2
  LoopTerminator real_trials
  Routine bye
